<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="jp.riken" Category="bcap"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>TaskService</Identifier>
  <DisplayName>Task Service</DisplayName>
  <Description>
    Run robot controller tasks (programs) by name on a DENSO robot controller over b-CAP,
    and list available task names. The server is stateless: each command opens a b-CAP
    connection, acquires the task handle, performs the operation, then releases the handle
    and disconnects.
  </Description>

  <!-- Commands -->
  <Command>
    <Identifier>RunTask</Identifier>
    <DisplayName>Run Task</DisplayName>
    <Description>
      Start a controller task in one-cycle mode (mode 1) by name. This is an observable
      command. In v1 the command only starts the task and then waits a fixed interval
      (configured by 'run_wait_seconds', default 10 s) before completing; it does not yet
      detect actual task completion. The observable form is kept so completion detection
      can be added later without changing the interface.
    </Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>TaskName</Identifier>
      <DisplayName>Task Name</DisplayName>
      <Description>The name of the controller task (program) to start.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>Started</Identifier>
      <DisplayName>Started</DisplayName>
      <Description>True if the task was started successfully.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>TaskAccessError</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>GetTaskNames</Identifier>
    <DisplayName>Get Task Names</DisplayName>
    <Description>List the names of all available controller tasks.</Description>
    <Observable>No</Observable>
    <Response>
      <Identifier>TaskNames</Identifier>
      <DisplayName>Task Names</DisplayName>
      <Description>The list of controller task names.</Description>
      <DataType>
        <List>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </List>
      </DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>ControllerConnectionError</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <!-- Command execution errors -->
  <DefinedExecutionError>
    <Identifier>ControllerConnectionError</Identifier>
    <DisplayName>Controller Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the robot controller over b-CAP.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskAccessError</Identifier>
    <DisplayName>Task Access Error</DisplayName>
    <Description>Failed to access or start the requested task (e.g. the task name does not exist or start was rejected).</Description>
  </DefinedExecutionError>
</Feature>
